PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'age': '', 'handedness': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = exp_builder_script
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Routines
  Routine debriefing
    TextComponent debr_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congratulations, you made it!
        Thank you very much for your participation, we hope you had some fun.
        You can close the window now.

        Bye :)
    KeyboardComponent debr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction
    TextComponent instr_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hey!
        Welcome to our experiment. Today, you will be shown images of everyday scenes and we will ask you to search for an object in it. We’ll demonstrate the object to you in a second.
        We included a fixation cross before each image which will move your mouse to the exact same starting point before you start your search. Once you found the object simply klick on it with your mouse, then the next fixation cross and the next scene will appear automatically. Try to find the object as quickly as possible as the image will only be shown for 7 seconds.
        Surely you can end this experiment every time you want but of course we’d be very happy if you stick till the end! :)
        All the data will be collected anonymously and will be stored for scientific purpose. By starting the experiment you agree to the terms and conditions.

        If you’re ready, press the space bar and you’ll see the object. Have fun!
    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_5
      Code Type = Py
  Routine init_stimulus_presentation
    TextComponent stimulus_text_01
      letterHeight = 0.035
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the stimulus. In the experiment the stimulus will be presented in grey.
    TextComponent stimulus_text_02
      letterHeight = 0.035
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Take your time and remember it well! When you´re ready to start the experiment, press „space“.
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    KeyboardComponent stimulus_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = T
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  Routine present_image_block_01
    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
        timeout_clock = core.Clock()
      Begin Routine:
        print(FileName, type(FileName))
        if FileName == None:
            continueRoutine=False
        else:
            continueRoutine=True
            Imagename = "raw_scenes/" + FileName + ".png"
            timeout_clock.reset()

            #image_scene_2.flipHoriz = True
            if TrialType == "mirrored" and BlockNumber == 2:
                image_scene.flipHoriz = True
            else:
                image_scene.flipHoriz = False
      Each Frame:
        if timeout_clock.getTime() > 15:
            ClickInTime = 0
            continueRoutine=False
        else:
            ClickInTime = 1
            continueRoutine=True
      End Routine:
        #if find_target.leftButton == [1] or find_target.midButton == [1] or find_target.rightButton == [1]:
        #    ClickInTime = 1
        #else:
        #    ClickInTime = 0



        thisExp.addData("id_participant", expInfo['participant'])
        thisExp.addData("age", expInfo['age'])
        thisExp.addData("handedness", expInfo['handedness'])
        thisExp.addData("gender", expInfo['gender'])
        thisExp.addData("Xpos", Xpos)
        thisExp.addData("Ypos", Ypos)
        thisExp.addData("ClickInTime", ClickInTime)
    PolygonComponent stimulus
      fillColor = white
      pos [set every repeat] = (Xpos,Ypos)
      saveStartStop = False
      shape = rectangle
      size = (.04, .04)
      startVal [time (s)] = 0.0
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    ImageComponent image_scene
      image [set every repeat] = $Imagename
      ori [set every repeat] = 0
      saveStartStop = False
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    MouseComponent find_target
      clickable = stimulus
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent target_letter
      color = grey
      letterHeight = 0.04
      pos [set every repeat] = (Xpos,Ypos)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = T
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  Routine fixation_cross_block
    TextComponent text_cross_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_cross_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent drift_mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        drift_mouse.setPos((0,))
  Routine fixation_cross_block_1
    TextComponent text_cross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_cross
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent drift_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_cross_space
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press „space“ when ready
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        drift_mouse.setPos((0,0))
  Routine fixation_cross_block_2
    TextComponent text_cross_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_cross_3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    MouseComponent drift_mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        drift_mouse.setPos((0,0))
  Routine present_image_block_2
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        Image = "raw_scenes/" + str(FileName) + ".png"
        #image_scene_2.flipHoriz = True
        if TrialType == "mirrored":
            image_scene_2.flipHoriz = True
        else:
            image_scene_2.flipHoriz = False
    ImageComponent image_scene_2
      image [set every repeat] = $Image
      ori [set every repeat] = 0
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    MouseComponent find_target_2
      clickable = stimulus_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent stimulus_2
      fillColor = white
      pos [set every repeat] = (Xpos,Ypos)
      shape = rectangle
      size = (.04, .04)
      startVal [time (s)] = 0.0
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  Routine StartBlock2
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Start Block 2
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  Routine debug
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        image.flipHoriz=True
    ImageComponent image
      image [set every repeat] = raw_scenes/Bathroom_1.png
      ori [set every repeat] = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ITI
  Routine initialise_trial
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        if BlockNumber == 2 and TrialType == "mirrored":
            Xpos = -Xcoord
            Ypos = Ycoord
        else:
            Xpos = Xcoord
            Ypos = Ycoord
  Routine inititalise_block
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        if BlockNumber == 1:
            ConditionFile = "condition_participant/ConditionFile_Mirror_Block1_" + str(expInfo['participant']) + ".xlsx"
        elif BlockNumber == 2:
            ConditionFile = "condition_participant/ConditionFile_Mirror_Block2_" + str(expInfo['participant']) + ".xlsx"

        print(ConditionFile)
    TextComponent text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press „space“ for starting the experiment
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  Routine init_stimulus_presentation
  LoopInitiator BlockLoop loopType="TrialHandler"
    conditionsFile = block_number.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'BlockNumber': 1},
      {'BlockNumber': 2}]
    Routine inititalise_block
    LoopInitiator TrialLoop loopType="TrialHandler"
      conditionsFile = $ConditionFile
      loopType = random
      nReps = 1
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      Routine initialise_trial
      Routine fixation_cross_block_1
      Routine present_image_block_01
    LoopTerminator TrialLoop
  LoopTerminator BlockLoop
  Routine debriefing
